<?xml version="1.0" encoding="ISO-8859-1"?>
<settings><!-- Default kilroy settings for jfocal -->
  <!-- Valve parameters -->
  <valves_com_port type="string">COM7</valves_com_port>	<!-- COM port of serial connection to valves -->  
  <num_simulated_valves type="int">0</num_simulated_valves><!-- Number of valves to simulate (Defaults to 0) -->
  <valve_class type="string">valves.hamilton_mvp4</valve_class>
	

  <!-- Pump parameters -->
  <pump_class type="string">pumps.rainin_rp1</pump_class><!-- Control class for pump -->
  <pump_com_port type="string">COM26</pump_com_port><!-- COM port of serial connection to pump -->
  <pump_ID type="int">30</pump_ID><!-- ID of Pump -->
  <simulate_pump type="boolean">True</simulate_pump><!-- Simulate pump? (Defaults to False) -->
  <flip_flow_direction type="boolean">False</flip_flow_direction><!-- Flip the direction defined as forward? -->
  
  <!-- General Kilroy parameters -->
  <verbose type="boolean">True</verbose>
  <serial_verbose type="boolean">False</serial_verbose>  <!-- display serial commands? -->
  <tcp_port type="int">9500</tcp_port> <!-- TCP/IP port for local communication with Dave -->
  <protocols_file type = "">default_config.xml</protocols_file><!-- Location of default protocol -->
  <commands_file type = "">default_config.xml</commands_file><!-- Location of default commands -->

</settings>
